PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[1.000,1.000,1.000]
  expName = Navon_1
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Routines
  Routine global_training_instructions
    ImageComponent image_example
      image = Bilder/HS.png
      pos = (0, 0.1)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent example_question
      color = black
      letterHeight = 0.04
      pos = (0, 0.38)
      startVal [time (s)] = 0.0
      text = What is the GLOBAL shape of this letter?
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    TextComponent example_solution
      color = black
      letterHeight = 0.04
      pos = (0, -0.28)
      startVal [time (s)] = 0.0
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      text:
        In this example the GLOBAL form is an H. The capital letter (H) represents the GLOBAL form and is composed of small letters (S). Please make a note of this.

        Please press the space bar to start a short workout.
    KeyboardComponent end_global_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      store = nothing
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  Routine general_instructions_1
    TextComponent text_general_instructions_1
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for taking part in our experiment to test the ability to perceive.

        Please read the instructions in the mail carefully first. It is important that this experiment be performed on a personal computer.

        The experiment will take a maximum of 15 minutes.

        To continue, please press the space bar.
    KeyboardComponent end_general_instructions_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine general_instructions_2
    TextComponent text_general_instructions_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Wir bitten Sie zu Beginn, Ihre Aufmerksamkeit entweder auf die globale oder lokale Struktur des Buchstabens zu wenden. Es wird Ihnen gleich ein Beispiel gezeigt. Nachdem die Buchstaben gezeigt wurden können Sie durch Tastendruck den Buchstaben bestimmen.

        Versuchen Sie bitte so schnell wie möglich zu antworten, ohne jedoch Fehler zu machen.

        Bitte drücken Sie die Leertaste
    KeyboardComponent end_general_instructions_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine global_training_trial
    GratingComponent interval_1
      color = $[1.000,1.000,1.000]
      sf = None
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      tex = None
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    GratingComponent interval_2
      color = $[1.000,1.000,1.000]
      sf = None
      size = (2, 2)
      startVal [time (s)] = 2.25
      stopVal [duration (s)] = 0.5
      tex = None
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    TextComponent fixation_point
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image_letter
      image [set every repeat] = $Letter
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.25
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    TextComponent training_question
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 2.75
      text = Please name the GLOBAL shape of the letter.
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    KeyboardComponent solution_global_training
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $Answer
      forceEndRoutine = True
      startVal [time (s)] = 2.75
      storeCorrect = True
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    ImageComponent key
      image = Bilder/Key_note.png
      pos = (0, -0.2)
      size = (0.6, 0.3)
      startVal [time (s)] = 2.75
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  Routine start_global_training
    TextComponent start_gloal_training_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The training phase now begins.

        Please pay attention to the GLOBAL shape of the letters

        You can again determine the letter by pressing the keyboard (1, 2, 3, 4).

        To begin, please click the space bar.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_message
    TextComponent end_msg
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Thank you very much for your participation!

        The experiment is now over. We would like to remind you that we are always available to answer your questions.

        Your test team

        Soh Mei Ling (hpxms1@nottingham.edu.my),
        Chong Kai Hao (khpy6ckh@nottingham.edu.my),
        Jonathon Choo (hpxkc1@nottingham.edu.my)

        The window closes by pressing the space bar.
    KeyboardComponent end_experiment
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      store = nothing
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  Routine infromed_consent
    TextComponent text_informed_consent
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Consent to participate in the experiment:

        I am aware that my data will be treated as strictly confidential and anonymized.

        My participation is voluntary and can be ended at any time.

        I am informed about the type, the aim, the procedure as well as possible advantages and disadvantages of the study.

        All of my questions about the study have been answered and I have had plenty of time to make my decision.

        By pressing the space bar, you confirm that you have read the points above and that you want to take part in the experiment. Otherwise we ask you to close the window.
    KeyboardComponent end_informed_consent
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
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  Routine start_global_testing
    TextComponent start_gloal_training_text_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The test phase has ended. Now the second part of the actual experiment begins.

        In the following pass, please focus your attention on the GLOBAL shape of the letter.

        When you are ready to continue the experiment, please press the space bar.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine global_testing_trial
    GratingComponent interval
      color = $[1.000,1.000,1.000]
      sf = None
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      tex = None
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    GratingComponent interval_3
      color = $[1.000,1.000,1.000]
      sf = None
      size = (2, 2)
      startVal [time (s)] = 2.25
      stopVal [duration (s)] = 0.5
      tex = None
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    TextComponent fixation_point_2
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image_letter_2
      image [set every repeat] = $Letter
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.25
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    TextComponent training_question_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 2.75
      text = Please name the GLOBAL shape of the letter.
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    KeyboardComponent solution_global_testing
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $Answer
      forceEndRoutine = True
      startVal [time (s)] = 2.75
      storeCorrect = True
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    ImageComponent key_2
      image = Bilder/Key_note.png
      pos = (0, -0.2)
      size = (0.6, 0.3)
      startVal [time (s)] = 2.75
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  Routine local_training_instructions
    ImageComponent image_example_2
      image = Bilder/HS.png
      pos = (0.0, 0.1)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent example_question_2
      color = black
      letterHeight = 0.04
      pos = (0, 0.38)
      startVal [time (s)] = 0.0
      text = What does "the LOCAL shape" of a letter mean?
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    TextComponent example_solution_2
      color = black
      letterHeight = 0.04
      pos = (0, -0.28)
      startVal [time (s)] = 0.0
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      text:
        In this picture the LOCAL shape is an S. The capital letter (H) consists of small letters (S) that represent the LOCAL shape. Please make a note of this.

        Please press the space bar to start training.
    KeyboardComponent end_global_instructions_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      store = nothing
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  Routine half_time
    TextComponent next_round
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are halfway through the experiment!

        In the next part we ask you to focus on the GLOBAL shape of the letters. As a reminder, you will again be shown an example beforehand.

        Please press the space bar to get to for example.
    KeyboardComponent end_next_round
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine local_training_trial
    GratingComponent interval_4
      sf = None
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      tex = None
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    GratingComponent interval_5
      color = $[1.000,1.000,1.000]
      sf = None
      size = (2, 2)
      startVal [time (s)] = 2.25
      stopVal [duration (s)] = 0.5
      tex = None
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    TextComponent fixation_point_3
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image_letter_3
      image [set every repeat] = $Letter
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.25
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    TextComponent training_question_3
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 2.75
      text = Please state the LOCAL form of the letter.
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    KeyboardComponent solution_local_training
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $Answer
      forceEndRoutine = True
      startVal [time (s)] = 2.75
      storeCorrect = True
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    ImageComponent key_3
      image = Bilder/Key_note.png
      pos = (0, -0.2)
      size = (0.6, 0.3)
      startVal [time (s)] = 2.75
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  Routine start_local_training
    TextComponent start_gloal_training_text_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now go through a short training phase in which you can familiarize yourself with the procedure.

        Please focus your attention on the LOCAL shape of the letter for this run.

        You can determine the letter by pressing the keyboard (1, 2, 3, 4).

        To begin, please press the spacebar.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine start_local_testing
    TextComponent start_gloal_training_text_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The test phase has ended. Now the real experiment begins.

        In the following pass, please focus your attention on the LOCAL shape of the letter.

        When you are ready to start the experiment, please press the space bar.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine local_testing_trial
    GratingComponent interval_6
      color = $[1.000,1.000,1.000]
      sf = None
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      tex = None
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    GratingComponent interval_7
      color = $[1.000,1.000,1.000]
      sf = None
      size = (2, 2)
      startVal [time (s)] = 2.25
      stopVal [duration (s)] = 0.5
      tex = None
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    TextComponent fixation_point_4
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image_letter_4
      image [set every repeat] = $Letter
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.25
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    TextComponent training_question_4
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 2.75
      text = Please state the LOCAL form of the letter.
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    KeyboardComponent solution_local_testing
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $Answer
      forceEndRoutine = True
      startVal [time (s)] = 2.75
      storeCorrect = True
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    ImageComponent key_4
      image = Bilder/Key_note.png
      pos = (0, -0.2)
      size = (0.6, 0.3)
      startVal [time (s)] = 2.75
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  Routine Instruktionen
    TextComponent Instruktion
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instruction:

        The experiment is divided into two runs. Before starting the walkthrough, you will be asked to focus on either the global or local form of the letter (an explanation follows).

        After that you will see letters on the screen for a brief moment in both phases. Your task is to determine the letter that was presented as quickly as possible at the touch of a button.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine general_instructions_1
  Routine infromed_consent
  Routine Instruktionen
  Routine local_training_instructions
  Routine start_local_training
  LoopInitiator local_training_loop loopType="TrialHandler"
    conditionsFile = Local_Training.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Buchstabe', 'Bilder/EE.png'), ('Kongruenz', 'kongruent'), ('Häufigkeit', 'häufig'), ('Antwort', 'e')]),
      OrderedDict([('Buchstabe', 'Bilder/XX.png'), ('Kongruenz', 'kongruent'), ('Häufigkeit', 'selten'), ('Antwort', 'x')]),
      OrderedDict([('Buchstabe', 'Bilder/NE.png'), ('Kongruenz', 'inkongruent'), ('Häufigkeit', 'häufig'), ('Antwort', 'e')]),
      OrderedDict([('Buchstabe', 'Bilder/XQ.png'), ('Kongruenz', 'inkongruent'), ('Häufigkeit', 'selten'), ('Antwort', 'q')])]
    Routine local_training_trial
  LoopTerminator local_training_loop
  Routine start_local_testing
  LoopInitiator local_testing_loop loopType="TrialHandler"
    conditionsFile = Local_Testing.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Buchstabe', 'Bilder/EE.png'), ('Kongruenz', 'kongruent'), ('Häufigkeit', 'häufig'), ('Antwort', 'e')]),
      OrderedDict([('Buchstabe', 'Bilder/NN.png'), ('Kongruenz', 'kongruent'), ('Häufigkeit', 'häufig'), ('Antwort', 'n')]),
      OrderedDict([('Buchstabe', 'Bilder/QQ.png'), ('Kongruenz', 'kongruent'), ('Häufigkeit', 'selten'), ('Antwort', 'q')]),
      OrderedDict([('Buchstabe', 'Bilder/XX.png'), ('Kongruenz', 'kongruent'), ('Häufigkeit', 'selten'), ('Antwort', 'x')]),
      OrderedDict([('Buchstabe', 'Bilder/EN.png'), ('Kongruenz', 'inkongruent'), ('Häufigkeit', 'häufig'), ('Antwort', 'n')]),
      OrderedDict([('Buchstabe', 'Bilder/NE.png'), ('Kongruenz', 'inkongruent'), ('Häufigkeit', 'häufig'), ('Antwort', 'e')]),
      OrderedDict([('Buchstabe', 'Bilder/QX.png'), ('Kongruenz', 'inkongruent'), ('Häufigkeit', 'selten'), ('Antwort', 'x')]),
      OrderedDict([('Buchstabe', 'Bilder/XQ.png'), ('Kongruenz', 'inkongruent'), ('Häufigkeit', 'selten'), ('Antwort', 'q')]),
      OrderedDict([('Buchstabe', 'Bilder/EE.png'), ('Kongruenz', 'kongruent'), ('Häufigkeit', 'häufig'), ('Antwort', 'e')]),
      OrderedDict([('Buchstabe', 'Bilder/NN.png'), ('Kongruenz', 'kongruent'), ('Häufigkeit', 'häufig'), ('Antwort', 'n')]),
      OrderedDict([('Buchstabe', 'Bilder/QQ.png'), ('Kongruenz', 'kongruent'), ('Häufigkeit', 'selten'), ('Antwort', 'q')]),
      OrderedDict([('Buchstabe', 'Bilder/XX.png'), ('Kongruenz', 'kongruent'), ('Häufigkeit', 'selten'), ('Antwort', 'x')])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
    Routine local_testing_trial
  LoopTerminator local_testing_loop
  Routine half_time
  Routine global_training_instructions
  Routine start_global_training
  LoopInitiator global_training_loop loopType="TrialHandler"
    conditionsFile = Global_Training.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Buchstabe', 'Bilder/NN.png'), ('Kongruenz', 'kongruent'), ('Häufigkeit', 'häufig'), ('Antwort', 2)]),
      OrderedDict([('Buchstabe', 'Bilder/QQ.png'), ('Kongruenz', 'kongruent'), ('Häufigkeit', 'selten'), ('Antwort', 3)]),
      OrderedDict([('Buchstabe', 'Bilder/EN.png'), ('Kongruenz', 'inkongruent'), ('Häufigkeit', 'häufig'), ('Antwort', 1)]),
      OrderedDict([('Buchstabe', 'Bilder/QX.png'), ('Kongruenz', 'inkongruent'), ('Häufigkeit', 'selten'), ('Antwort', 3)])]
    Routine global_training_trial
  LoopTerminator global_training_loop
  Routine start_global_testing
  LoopInitiator global_testing_loop loopType="TrialHandler"
    conditionsFile = Global_Testing.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Buchstabe', 'Bilder/EE.png'), ('Kongruenz', 'kongruent'), ('Häufigkeit', 'häufig'), ('Antwort', 'e')]),
      OrderedDict([('Buchstabe', 'Bilder/NN.png'), ('Kongruenz', 'kongruent'), ('Häufigkeit', 'häufig'), ('Antwort', 'n')]),
      OrderedDict([('Buchstabe', 'Bilder/QQ.png'), ('Kongruenz', 'kongruent'), ('Häufigkeit', 'selten'), ('Antwort', 'q')]),
      OrderedDict([('Buchstabe', 'Bilder/XX.png'), ('Kongruenz', 'kongruent'), ('Häufigkeit', 'selten'), ('Antwort', 'x')]),
      OrderedDict([('Buchstabe', 'Bilder/EN.png'), ('Kongruenz', 'inkongruent'), ('Häufigkeit', 'häufig'), ('Antwort', 'e')]),
      OrderedDict([('Buchstabe', 'Bilder/NE.png'), ('Kongruenz', 'inkongruent'), ('Häufigkeit', 'häufig'), ('Antwort', 'n')]),
      OrderedDict([('Buchstabe', 'Bilder/QX.png'), ('Kongruenz', 'inkongruent'), ('Häufigkeit', 'selten'), ('Antwort', 'q')]),
      OrderedDict([('Buchstabe', 'Bilder/XQ.png'), ('Kongruenz', 'inkongruent'), ('Häufigkeit', 'selten'), ('Antwort', 'x')]),
      OrderedDict([('Buchstabe', 'Bilder/EE.png'), ('Kongruenz', 'kongruent'), ('Häufigkeit', 'häufig'), ('Antwort', 'e')]),
      OrderedDict([('Buchstabe', 'Bilder/NN.png'), ('Kongruenz', 'kongruent'), ('Häufigkeit', 'häufig'), ('Antwort', 'n')]),
      OrderedDict([('Buchstabe', 'Bilder/QQ.png'), ('Kongruenz', 'kongruent'), ('Häufigkeit', 'selten'), ('Antwort', 'q')]),
      OrderedDict([('Buchstabe', 'Bilder/XX.png'), ('Kongruenz', 'kongruent'), ('Häufigkeit', 'selten'), ('Antwort', 'x')])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
    Routine global_testing_trial
  LoopTerminator global_testing_loop
  Routine end_message
