PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[1.000,1.000,1.000]
  expName = SCWT
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Routines
  Routine Welcome
    TextComponent WelcomeText
      color = $[-0.435,-0.435,-0.435]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Welcome!

        You will be given a new task,
        go ahead and press 'SPACE' key to continue
        when you are ready.



        Press 'SPACE' to continue
    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruction
    TextComponent text_Instruction
      color = $[-0.435,-0.435,-0.435]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you are asked to respond to either the words or the colors printed in “Red,” “Green,” and “Blue”.







        Select 'LEFT' for red, 'UP' for green, 'RIGHT' for blue


        Press 'SPACE' to continue.
    KeyboardComponent Instruction_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_Instruction
      image = arrowColor.png
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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  Routine ExptTrial
    TextComponent trial_text
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
      units = norm
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    KeyboardComponent trial_resp
      allowedKeys = 'left','right','up'
      correctAns = $answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent key_image_pic
      image = arrowColor.png
      pos = (0, -.375)
      size = (0.35, 0.17)
      startVal [time (s)] = 0.0
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  Routine trialNO
    CodeComponent test
      Code Type = Auto->JS
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      Each Frame:
        n = Looping_trials.thisRepN
    TextComponent number_of_trial
      color = $[-0.435,-0.435,-0.435]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Are you ready?


        Trial + str(n)
    KeyboardComponent trial_no_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent trial_no_text
      color = $[-0.435,-0.435,-0.435]
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      text = Press 'SPACE' to continue.
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  Routine expTrial_inst
    TextComponent exp_trial_text
      color = $[-0.435,-0.435,-0.435]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, we are starting the real trial. Please respond as fast as possible.

        Press 'SPACE' when you are ready.
    KeyboardComponent exp_trial_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
    TextComponent fixation_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
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  Routine End_Expt
    TextComponent end_text
      color = $[-0.435,-0.435,-0.435]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation in the study. This is the end of the experiment.


        Please press 'SPACE' key to exit.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PracticeInst
    TextComponent pract_text_instr
      color = $[-0.435,-0.435,-0.435]
      letterHeight = 0.03
      pos = (0, -.20)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_prac
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    KeyboardComponent practice_resp
      allowedKeys = 'right', 'up','left',
      correctAns = $corrResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent reminder_image
      image = arrowColor.png
      pos = (0, -.375)
      size = (0.35, 0.17)
      startVal [time (s)] = 0.0
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    TextComponent practiceStim_text
      color [set every repeat] = $practiceColor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $practiceWord
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  Routine PracticeFB
    CodeComponent code_FB
      Code Type = Auto->JS
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      Begin Experiment:
        msg='doh!'
        #if this comes up we forgot to update the msg!
      Begin Routine:
        if not practice_resp.keys:
            msg = "Failed to respond"
        elif practice_resp.corr:
            msg = "Correct!"
        else:
            msg = "Oops! That was wrong."
    TextComponent feedback_text
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $msg
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Flow
  Routine Welcome
  Routine Instruction
  LoopInitiator Looping_trials loopType="TrialHandler"
    conditionsFile = WCSTInst.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Trial', 'Word'), ('instruction_prac', "Please respond according to the Word presented. \nFor this trial, the word 'red' is presented in black color. You should choose 'left' arrow because we are responding to the WORD. "), ('file', 'wordStimuli.xlsx'), ('practiceWord', 'red'), ('practiceColor', 'black'), ('corrResponse', 'left')]),
      OrderedDict([('Trial', 'Color'), ('instruction_prac', "Please respond according to the Word presented. \nFor this trial, the word 'black' is presented in red color. You should choose 'left' arrow because we are responding to the COLOR."), ('file', 'colorStimuli.xlsx'), ('practiceWord', 'black'), ('practiceColor', 'red'), ('corrResponse', 'left')]),
      OrderedDict([('Trial', 'Word-color'), ('instruction_prac', "Please respond according to the Word presented. \nFor this trial, the word 'black' is presented in red color. You should choose 'left' arrow because we are responding to the COLOR."), ('file', 'wcStimuli.xlsx'), ('practiceWord', 'black'), ('practiceColor', 'red'), ('corrResponse', 'left')])]
    Routine trialNO
    LoopInitiator practice_looping loopType="TrialHandler"
      conditionsFile = $practiceFile
      loopType = random
      nReps = 1
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      Routine fixation
      Routine PracticeInst
      Routine PracticeFB
    LoopTerminator practice_looping
    Routine expTrial_inst
    LoopInitiator exp_trials loopType="TrialHandler"
      conditionsFile = $file
      loopType = random
      nReps = 3
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      Routine fixation
      Routine ExptTrial
    LoopTerminator exp_trials
  LoopTerminator Looping_trials
  Routine End_Expt
