PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant': '', 'age': '', 'gender (M/F)': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Navon2
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $stimFile
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.2
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    KeyboardComponent key_resp
      allowedKeys = 's','h'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = +
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  Routine thanks
    TextComponent thankstext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation.

        Your responses have been recorded.

        Press any key to exit the experiment.
    KeyboardComponent ok
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrMain
    TextComponent thankstext_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the study!

        Remember, press;
        - 'S' if the SMALL letters are S
        - 'H' if the SMALL letters are H

        Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent ok_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instrMain
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimFile': 'bigHsmallH.png', 'congruence': 'consistent', 'corrAns': 'h'},
      {'stimFile': 'bigHsmallS.png', 'congruence': 'conflicting', 'corrAns': 's'},
      {'stimFile': 'bigSsmallS.png', 'congruence': 'consistent', 'corrAns': 's'},
      {'stimFile': 'bigSsmallH.png', 'congruence': 'conflicting', 'corrAns': 'h'},
      {'stimFile': 'bigHsmallH.png', 'congruence': 'consistent', 'corrAns': 'h'},
      {'stimFile': 'bigHsmallS.png', 'congruence': 'conflicting', 'corrAns': 's'},
      {'stimFile': 'bigSsmallS.png', 'congruence': 'consistent', 'corrAns': 's'},
      {'stimFile': 'bigSsmallH.png', 'congruence': 'conflicting', 'corrAns': 'h'},
      {'stimFile': 'bigHsmallH.png', 'congruence': 'consistent', 'corrAns': 'h'},
      {'stimFile': 'bigHsmallS.png', 'congruence': 'conflicting', 'corrAns': 's'},
      {'stimFile': 'bigSsmallS.png', 'congruence': 'consistent', 'corrAns': 's'},
      {'stimFile': 'bigSsmallH.png', 'congruence': 'conflicting', 'corrAns': 'h'},
      {'stimFile': 'bigHsmallH.png', 'congruence': 'consistent', 'corrAns': 'h'},
      {'stimFile': 'bigHsmallS.png', 'congruence': 'conflicting', 'corrAns': 's'},
      {'stimFile': 'bigSsmallS.png', 'congruence': 'consistent', 'corrAns': 's'},
      {'stimFile': 'bigSsmallH.png', 'congruence': 'conflicting', 'corrAns': 'h'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
