PsychoPy2experiment version="2021.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001', 'gender': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = stroop-test
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Routines
  Routine Trial
    TextComponent trial_text
      color = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent trial_resp
      allowedKeys = 'left','right''up'
      correctAns = $answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Feedback
  Routine Practice_Trial
    TextComponent practice_text
      color [set every repeat] = $practiceColor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $practiceWord
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    KeyboardComponent practice_resp
      allowedKeys = 'left','right','up'
      correctAns = $corrResponse
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent reminder
      letterHeight = 0.1
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Select 'LEFT' for red, 'UP' for green, 'RIGHT' for blue.
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  Routine End
    TextComponent end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = This is the end of the study. Thank you for participating in the study.
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  Routine Welcome
    TextComponent welcome_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome! This is a Stroop task.

        In this task, you are asked to respond to either the words or the colors printed in “Red,” “Green,” and “Blue”.

        Select 'LEFT' for red, 'UP' for green, 'RIGHT' for blue.

        Press 'SPACE' to continue.
    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = +
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Flow
  Routine Welcome
  LoopInitiator Practice_loop loopType="TrialHandler"
    conditionsFile = wordPractice_stim.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'type': 'Word', 'practiceWord': 'red', 'practiceColor': 'black', 'corrResponse': 'left'},
      {'type': 'Word', 'practiceWord': 'green', 'practiceColor': 'black', 'corrResponse': 'up'},
      {'type': 'Word', 'practiceWord': 'blue', 'practiceColor': 'black', 'corrResponse': 'right'}]
    Routine fixation
    Routine Practice_Trial
  LoopTerminator Practice_loop
  LoopInitiator trial_loop loopType="TrialHandler"
    conditionsFile = wordStimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'type': 'Word', 'word': 'red', 'color': 'black', 'answer': 'left'},
      {'type': 'Word', 'word': 'red', 'color': 'black', 'answer': 'left'},
      {'type': 'Word', 'word': 'blue', 'color': 'black', 'answer': 'right'},
      {'type': 'Word', 'word': 'blue', 'color': 'black', 'answer': 'right'},
      {'type': 'Word', 'word': 'green', 'color': 'black', 'answer': 'up'},
      {'type': 'Word', 'word': 'green', 'color': 'black', 'answer': 'up'}]
    Routine fixation
    Routine Trial
  LoopTerminator trial_loop
  Routine End
