PsychoPy2experiment version="2021.2.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop-test
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Routines
  Routine Trial
  Routine Feedback
    CodeComponent code
      Code Type = Auto->JS
    TextComponent fb
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine Practice_Trial
    TextComponent stim_text
      color [set every repeat] = $practiceColor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $practiceWord
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    KeyboardComponent practice_resp
      allowedKeys = 'left','right','up'
      correctAns = $corrResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine End
    TextComponent end_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = This is the end of the study. Thank you for participating in the study. 
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  Routine Welcome
    TextComponent welcome_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Welcome! This is a Stroop task. 
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    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Welcome
  LoopInitiator counter_loop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('Trial', 'Word'), ('practiceFile', 'wordPractice_stim.xlsx'), ('file', 'wordStimuli.xlsx')]),
      OrderedDict([('Trial', 'Color'), ('practiceFile', 'colorPractice_stim.xlsx'), ('file', 'colorStimuli.xlsx')]),
      OrderedDict([('Trial', 'Word-color'), ('practiceFile', 'colorPractice_stim.xlsx'), ('file', 'wcStimuli.xlsx')])]
    LoopInitiator practice_loop loopType="TrialHandler"
      conditionsFile = $practiceFile
      loopType = random
      nReps = 1
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      Routine Practice_Trial
      Routine Feedback
    LoopTerminator practice_loop
    LoopInitiator trial_loop loopType="TrialHandler"
      conditionsFile = $file
      loopType = random
      nReps = 1
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      Routine Trial
    LoopTerminator trial_loop
  LoopTerminator counter_loop
  Routine End
